<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="sheet_normal_v2" name="sheet_normal_v2">
  <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
    <!-- metadata about the CellML document itself -->
    <rdf:Description rdf:about="">
      <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
        <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <vCard:Family>Rajagopal
          </vCard:Family>
          <vCard:Given>Vijayaraghavan
          </vCard:Given>
        </vCard:N>
        <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <rdf:value>v.rajagopal@auckland.ac.nz
          </rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
        </vCard:EMAIL>
        <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <vCard:Orgname>The University of Auckland
          </vCard:Orgname>
          <vCard:Orgunit>The Bioengineering Institute
          </vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
      <dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
        <dcterms:W3CDTF>2003-12-28
        </dcterms:W3CDTF>
      </dcterms:created>
    </rdf:Description>
    <!-- description of the model -->
    <rdf:Description rdf:about="#fiber_normal_v1">
      <cmeta:comment rdf:parseType="Resource">
        <rdf:value>This is a CellML version of the Holzapfel equation, augmented with terms to describe remodelling
        </rdf:value>
      </cmeta:comment>
      <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#">
        <bqs:Pubmed_id>pubmed_id
        </bqs:Pubmed_id>
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Master
                    </vCard:Family>
                    <vCard:Given>Vijay
                    </vCard:Given>
                    <vCard:Other>T
                    </vCard:Other>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Bob
                    </vCard:Family>
                    <vCard:Given>Billy
                    </vCard:Given>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">What cool article to reference ??
          </dc:title>
          <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
            <dcterms:W3CDTF>year
            </dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">The Journal of Cool Stuff
            </dc:title>
          </bqs:Journal>
          <bqs:volume>volume
          </bqs:volume>
          <bqs:first_page>1
          </bqs:first_page>
          <bqs:last_page>1000
          </bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF>
  <!-- Global units -->
  <units name="strain">
    <unit units="dimensionless"/>
  </units>
  <units name="stress">
    <unit units="dimensionless"/>
  </units>
  <component cmeta:id="interface" name="interface">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#interface">
        <cmeta:comment rdf:parseType="Resource">
          <rdf:value>We'll use this component as the "interface" to the model, all 
            other components are hidden via encapsulation in this component.
          </rdf:value>
        </cmeta:comment>
      </rdf:Description>
    </rdf:RDF>
    <!-- Variables we expect to be set/controlled externally (variables input for use in calculations)-->
    <variable initial_value="0" name="E11" private_interface="out" units="strain"/>
    <variable initial_value="0" name="E22" private_interface="out" units="strain"/>
    <variable initial_value="0" name="E33" private_interface="out" units="strain"/>
    <variable initial_value="0" name="E12" private_interface="out" units="strain"/>
    <variable initial_value="0" name="E13" private_interface="out" units="strain"/>
    <variable initial_value="0" name="E23" private_interface="out" units="strain"/>
    <variable initial_value="0" name="af" private_interface="out" units="strain"/>
    <variable initial_value="0" name="afs" private_interface="out" units="strain"/>
    <variable initial_value="0" name="an" private_interface="out" units="strain"/>
    <variable initial_value="0" name="as" private_interface="out" units="strain"/>
    <variable initial_value="0" name="bf" private_interface="out" units="strain"/>
    <variable initial_value="0" name="bfs" private_interface="out" units="strain"/>
    <variable initial_value="0" name="bn" private_interface="out" units="strain"/>
    <variable initial_value="0" name="bs" private_interface="out" units="strain"/>
    <variable initial_value="1" name="xendo" private_interface="out" units="strain"/>
    <variable initial_value="1" name="xperi" private_interface="out" units="strain"/>
    <variable name="Tdev11" private_interface="in" public_interface="out" units="stress"/>
    <variable name="Tdev22" private_interface="in" public_interface="out" units="stress"/>
    <variable name="Tdev33" private_interface="in" public_interface="out" units="stress"/>
    <variable name="Tdev12" private_interface="in" public_interface="out" units="stress"/>
    <variable name="Tdev13" private_interface="in" public_interface="out" units="stress"/>
    <variable name="Tdev23" private_interface="in" public_interface="out" units="stress"/>
  </component>
  <!--interface-->
  <!-- Defining the equations to use -->
  <component cmeta:id="equations" name="equations">
    <!-- Inputs -->
    <variable name="E11" public_interface="in" units="strain"/>
    <variable name="E22" public_interface="in" units="strain"/>
    <variable name="E33" public_interface="in" units="strain"/>
    <variable name="E12" public_interface="in" units="strain"/>
    <variable name="E13" public_interface="in" units="strain"/>
    <variable name="E23" public_interface="in" units="strain"/>
    <variable name="af" public_interface="in" units="strain"/>
    <variable name="afs" public_interface="in" units="strain"/>
    <variable name="an" public_interface="in" units="strain"/>
    <variable name="as" public_interface="in" units="strain"/>
    <variable name="bf" public_interface="in" units="strain"/>
    <variable name="bfs" public_interface="in" units="strain"/>
    <variable name="bn" public_interface="in" units="strain"/>
    <variable name="bs" public_interface="in" units="strain"/>
    <variable initial_value="1" name="xendo" units="strain"/>
    <variable initial_value="1" name="xperi" units="strain"/>
    <variable name="Tdev11" public_interface="out" units="stress"/>
    <variable name="Tdev22" public_interface="out" units="stress"/>
    <variable name="Tdev33" public_interface="out" units="stress"/>
    <variable name="Tdev12" public_interface="out" units="stress"/>
    <variable name="Tdev13" public_interface="out" units="stress"/>
    <variable name="Tdev23" public_interface="out" units="stress"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Tdev11_calculation">
        <eq/>
        <ci>Tdev11</ci>
		<piecewise>
		  <piece>
			<apply>
			  <times/>
			  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">4</cn>
			  <ci>af</ci>
			  <ci>E11</ci>
			  <apply>
				<exp/>
				<apply>
				  <times/>
				  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">4</cn>
				  <ci>bf</ci>
				  <apply>
					<power/>
					<ci>E11</ci>
					<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">2</cn>
				  </apply>
				</apply>
			  </apply>
			</apply>
			<apply>
			  <gt/>
			  <ci>E11</ci>
			  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">0.0</cn>
			</apply>
		  </piece>
		  <otherwise>
		    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="stress">0.0</cn>
		  </otherwise>
		</piecewise>	
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Tdev22_calculation">
        <eq/>
        <ci>Tdev22</ci>
		<piecewise>
		  <piece>
			<apply>
			  <times/>
			  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">4</cn>
			  <ci>as</ci>
			  <ci>xperi</ci>
			  <ci>E22</ci>
			  <apply>
				<exp/>
				<apply>
				  <times/>
				  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">4</cn>
				  <ci>bs</ci>
				  <ci>xperi</ci>
				  <apply>
					<power/>
					<ci>E22</ci>
					<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">2</cn>
				  </apply>
				</apply>
			  </apply>
			</apply>
			<apply>
			 <gt/>
			  <ci>E22</ci>
			  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">0.0</cn>
			</apply>
		  </piece>
		  <otherwise>
		      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="stress">0.0</cn>
		  </otherwise>
		</piecewise>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Tdev33_calculation">
        <eq/>
        <ci>Tdev33</ci>
		<piecewise>
		  <piece>
			<apply>
			  <times/>
			  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">4</cn>
			  <ci>an</ci>
			  <ci>xendo</ci>
			  <ci>E33</ci>
			  <apply>
				<exp/>
				<apply>
				  <times/>
				  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">4</cn>
				  <ci>bn</ci>
				  <ci>xendo</ci>
				  <apply>
					<power/>
					<ci>E33</ci>
					<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">2</cn>
				  </apply>
				</apply>
			  </apply>
			</apply>
			<apply>
			 <gt/>
			  <ci>E33</ci>
			  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">0.0</cn>
			</apply>
		  </piece>
		  <otherwise>
			<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="stress">0.0</cn>
		  </otherwise>
		</piecewise>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Tdev12_calculation">
        <eq/>
        <ci>Tdev12
        </ci>
        <apply>
          <times/>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">2
          </cn>
          <ci>afs
          </ci>
          <ci>E12
          </ci>
          <apply>
            <exp/>
            <apply>
              <times/>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">4
              </cn>
              <ci>bfs
              </ci>
              <apply>
                <power/>
                <ci>E12
                </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">2
                </cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Tdev13_calculation">
        <eq/>
        <ci>Tdev13
        </ci>
        <apply>
          <times/>
          <ci>E13
          </ci>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">0
          </cn>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Tdev23_calculation">
        <eq/>
        <ci>Tdev23
        </ci>
        <apply>
          <times/>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="strain">0
          </cn>
          <ci>E23
          </ci>
        </apply>
      </apply>
    </math>
  </component>
  <!--membrane-->
  <connection>
    <map_components component_1="interface" component_2="equations"/>
    <map_variables variable_1="E11" variable_2="E11"/>
    <map_variables variable_1="E22" variable_2="E22"/>
    <map_variables variable_1="E33" variable_2="E33"/>
    <map_variables variable_1="E12" variable_2="E12"/>
    <map_variables variable_1="E13" variable_2="E13"/>
    <map_variables variable_1="E23" variable_2="E23"/>
    <map_variables variable_1="Tdev11" variable_2="Tdev11"/>
    <map_variables variable_1="Tdev22" variable_2="Tdev22"/>
    <map_variables variable_1="Tdev33" variable_2="Tdev33"/>
    <map_variables variable_1="Tdev12" variable_2="Tdev12"/>
    <map_variables variable_1="Tdev13" variable_2="Tdev13"/>
    <map_variables variable_1="Tdev23" variable_2="Tdev23"/>
    <map_variables variable_1="af" variable_2="af"/>
    <map_variables variable_1="afs" variable_2="afs"/>
    <map_variables variable_1="an" variable_2="an"/>
    <map_variables variable_1="as" variable_2="as"/>
    <map_variables variable_1="bf" variable_2="bf"/>
    <map_variables variable_1="bfs" variable_2="bfs"/>
    <map_variables variable_1="bn" variable_2="bn"/>
    <map_variables variable_1="bs" variable_2="bs"/>
    
    
  </connection>
  <group>
    <relationship_ref relationship="encapsulation"/>
    <component_ref component="interface">
      <component_ref component="equations"/>
    </component_ref>
  </group>
</model>