<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="TransverselyIsotropic" name="TransverselyIsotropicActiveContraction">
  <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"><!-- metadata about the CellML document itself -->
    <rdf:Description rdf:about="">
      <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
        <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <vCard:Family>Nickerson
          </vCard:Family>
          <vCard:Given>David
          </vCard:Given>
        </vCard:N>
        <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <rdf:value>d.nickerson@auckland.ac.nz
          </rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
        </vCard:EMAIL>
        <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <vCard:Orgname>The University of Auckland
          </vCard:Orgname>
          <vCard:Orgunit>The Bioengineering Institute
          </vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
      <dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
        <dcterms:W3CDTF>2003-11-28
        </dcterms:W3CDTF>
      </dcterms:created>
    </rdf:Description><!-- description of the model -->
    <rdf:Description rdf:about="#TransverselyIsotropic">
      <cmeta:comment rdf:parseType="Resource">
        <rdf:value>This is a CellML version of the Transversely Isotropic constitutive material law,
          defining the relation between the eight independent strain components
          and the stress components. It is assumed that the strain components
          will be controlled externally by the application using this CellML
          model.
        </rdf:value>
      </cmeta:comment>
      <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#">
        <bqs:Pubmed_id>pubmed_id
        </bqs:Pubmed_id>
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Master
                    </vCard:Family>
                    <vCard:Given>Andre
                    </vCard:Given>
                    <vCard:Other>T
                    </vCard:Other>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Bob
                    </vCard:Family>
                    <vCard:Given>Billy
                    </vCard:Given>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">What cool article to reference ??
          </dc:title>
          <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
            <dcterms:W3CDTF>year
            </dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">The Journal of Cool Stuff
            </dc:title>
          </bqs:Journal>
          <bqs:volume>volume
          </bqs:volume>
          <bqs:first_page>1
          </bqs:first_page>
          <bqs:last_page>1000
          </bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF><!-- Global units -->
  <units name="strain">
    <unit units="dimensionless"/>
  </units>
  <units name="stress">
    <unit units="dimensionless"/>
  </units>
  <units name="pole">
    <unit units="dimensionless"/>
  </units>
  <units name="curvature">
    <unit units="dimensionless"/>
  </units>
  <units name="scale">
    <unit units="dimensionless"/>
  </units>
  <component cmeta:id="interface" name="interface">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#interface">
        <cmeta:comment rdf:parseType="Resource">
          <rdf:value>We'll use this component as the "interface" to the model, all 
            other components are hidden via encapsulation in this component.
          </rdf:value>
        </cmeta:comment>
      </rdf:Description>
    </rdf:RDF><!-- Variables we expect to be set/controlled externally -->
    <variable initial_value="0" name="E11" private_interface="out" units="strain"/>
    <variable initial_value="0" name="E22" private_interface="out" units="strain"/>
    <variable initial_value="0" name="E33" private_interface="out" units="strain"/>
    <variable initial_value="0" name="E12" private_interface="out" units="strain"/>
    <variable initial_value="0" name="E13" private_interface="out" units="strain"/>
    <variable initial_value="0" name="E23" private_interface="out" units="strain"/><!-- Variables we want to make available externally -->
    <variable name="Tdev11" private_interface="in" public_interface="out" units="stress"/>
    <variable name="Tdev22" private_interface="in" public_interface="out" units="stress"/>
    <variable name="Tdev33" private_interface="in" public_interface="out" units="stress"/>
    <variable name="Tdev12" private_interface="in" public_interface="out" units="stress"/>
    <variable name="Tdev13" private_interface="in" public_interface="out" units="stress"/>
    <variable name="Tdev23" private_interface="in" public_interface="out" units="stress"/>
    <variable initial_value="0" name="C1" private_interface="out" units="stress"/>
    <variable initial_value="0" name="C2" private_interface="out" units="dimensionless"/>
    <variable initial_value="0" name="C3" private_interface="out" units="dimensionless"/>
    <variable initial_value="0" name="C4" private_interface="out" units="dimensionless"/>
  <variable initial_value="0" name="C5" private_interface="out" units="dimensionless"/><variable initial_value="0" name="TCa" private_interface="out" units="stress"/></component><!--interface-->
  <component cmeta:id="equations" name="equations">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#equations">
        <cmeta:comment rdf:parseType="Resource">
          <rdf:value>In this simple model we only have one component, which holds the
            six equations.
          </rdf:value>
        </cmeta:comment>
      </rdf:Description>
    </rdf:RDF><!-- Inputs -->
    <variable name="E11" public_interface="in" units="strain"/>
    <variable name="E22" public_interface="in" units="strain"/>
    <variable name="E33" public_interface="in" units="strain"/>
    <variable name="E12" public_interface="in" units="strain"/>
    <variable name="E13" public_interface="in" units="strain"/>
    <variable name="E23" public_interface="in" units="strain"/><!-- Outputs computed here -->
    <variable name="Tdev11" public_interface="out" units="stress"/>
    <variable name="Tdev22" public_interface="out" units="stress"/>
    <variable name="Tdev33" public_interface="out" units="stress"/>
    <variable name="Tdev12" public_interface="out" units="stress"/>
    <variable name="Tdev13" public_interface="out" units="stress"/>
    <variable name="Tdev23" public_interface="out" units="stress"/><!-- Temporary variables -->
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev11_calculation_eq"><apply id="Tdev11_calculation"><eq/><ci>Tdev11</ci><apply><plus/><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>temp</ci><apply><plus/><ci>C2</ci><apply><times/><ci>C3</ci><ci>E11</ci></apply></apply></apply><ci>Ta</ci></apply></apply></math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev22_calculation_eq"><apply id="Tdev22_calculation"><eq/><ci>Tdev22</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>temp</ci><apply><plus/><ci>C2</ci><apply><times/><ci>C4</ci><ci>E22</ci></apply></apply></apply></apply></math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev33_calculation_eq"><apply id="Tdev33_calculation"><eq/><ci>Tdev33</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>temp</ci><apply><plus/><ci>C2</ci><apply><times/><ci>C4</ci><ci>E33</ci></apply></apply></apply></apply></math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev12_calculation_eq"><apply id="Tdev12_calculation"><eq/><ci>Tdev12</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>temp</ci><ci>C5</ci><ci>E12</ci></apply></apply></math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev13_calculation_eq"><apply id="Tdev13_calculation"><eq/><ci>Tdev13</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>temp</ci><ci>C5</ci><ci>E13</ci></apply></apply></math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" cmeta:id="Tdev23_calculation_eq"><apply id="Tdev23_calculation"><eq/><ci>Tdev23</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>temp</ci><ci>C4</ci><ci>E23</ci></apply></apply></math>
    <variable name="C1" public_interface="in" units="stress"/>
    <variable name="C2" public_interface="in" units="dimensionless"/>
    <variable name="C3" public_interface="in" units="dimensionless"/>
    <variable name="C4" public_interface="in" units="dimensionless"/>
  <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>temp</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="stress">0.5</cn><ci>C1</ci><apply><exp/><apply><plus/><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>C2</ci><apply><plus/><ci>E11</ci><ci>E22</ci><ci>E33</ci></apply></apply><apply><times/><ci>C3</ci><ci>E11</ci><ci>E11</ci></apply><apply><times/><ci>C4</ci><apply><plus/><apply><times/><ci>E22</ci><ci>E22</ci></apply><apply><times/><ci>E33</ci><ci>E33</ci></apply><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>E23</ci><ci>E23</ci></apply></apply></apply><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>C5</ci><apply><plus/><apply><times/><ci>E12</ci><ci>E12</ci></apply><apply><times/><ci>E13</ci><ci>E13</ci></apply></apply></apply></apply></apply></apply></apply></math><variable name="C5" public_interface="in" units="dimensionless"/><variable name="Ta" units="stress"/><variable name="TCa" public_interface="in" units="stress"/><variable initial_value="1.45" name="beta" units="dimensionless"/><math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>Ta</ci><apply><times/><ci>TCa</ci><apply><plus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn><apply><times/><ci>beta</ci><apply><minus/><apply><power/><apply><plus/><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>E11</ci></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.5</cn></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn></apply></apply></apply></apply></apply></math><variable name="temp" units="dimensionless"/></component><!--membrane-->
  <connection>
    <map_components component_1="interface" component_2="equations"/>
    <map_variables variable_1="E11" variable_2="E11"/>
    <map_variables variable_1="E22" variable_2="E22"/>
    <map_variables variable_1="E33" variable_2="E33"/>
    <map_variables variable_1="E12" variable_2="E12"/>
    <map_variables variable_1="E13" variable_2="E13"/>
    <map_variables variable_1="E23" variable_2="E23"/>
    <map_variables variable_1="Tdev11" variable_2="Tdev11"/>
    <map_variables variable_1="Tdev22" variable_2="Tdev22"/>
    <map_variables variable_1="Tdev33" variable_2="Tdev33"/>
    <map_variables variable_1="Tdev12" variable_2="Tdev12"/>
    <map_variables variable_1="Tdev13" variable_2="Tdev13"/>
    <map_variables variable_1="Tdev23" variable_2="Tdev23"/>
  <map_variables variable_1="C1" variable_2="C1"/><map_variables variable_1="C2" variable_2="C2"/><map_variables variable_1="C3" variable_2="C3"/><map_variables variable_1="C4" variable_2="C4"/><map_variables variable_1="C5" variable_2="C5"/><map_variables variable_1="TCa" variable_2="TCa"/></connection>
  <group>
    <relationship_ref relationship="encapsulation"/>
    <component_ref component="interface">
      <component_ref component="equations"/>
    </component_ref>
  </group>
</model>